PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = 0.3255, 0.3255, 0.3255
  expName = test
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine start
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    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        instruction
        bla bla bla
    TextComponent space_instruction_instruciton
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = press [space] to continue
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    KeyboardComponent advance_instruciton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # init vars
        response = None
        reward = None
  Routine instruction
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    TextComponent ins
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = here's the instruction! 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = press [space] to continue
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  Routine end
    RoutineSettingsComponent end
      disabled = True
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = thank you very much for competing the experiment! 
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = press [space] to continue
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  Routine item_2afc
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    ImageComponent item_l
      image [set every repeat] = $image_l
      pos = (-.35, 0)
      size = (0.310, 0.363)
      startVal [time (s)] = 0.0
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    ImageComponent item_r
      flipHoriz = True
      image [set every repeat] = $image_r
      pos = (0.35, 0)
      size = (0.310, 0.363)
      startVal [time (s)] = 0.0
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    KeyboardComponent item_trial
      allowedKeys = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction_item_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = j or k
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    CodeComponent process_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        ## init vars
        #response = None
        #reward = None
      End Routine:
        response = item_trial.keys

        if response == 'j':
            chosen_item = image_l
            reward = value_l
            is_old = is_old_l
            chosen_trial_id = chosen_trial_id_l
        elif response == 'k':
            chosen_item = image_r
            reward = value_r
            is_old = is_old_r
            chosen_trial_id = chosen_trial_id_r
        else:
            chosen_item = None
            reward = None
            is_old = None
            chosen_trial_id = None

        if trial_type == 0: # new new trial
            chosen_items.append(chosen_item)
            chosen_values.append(reward)
            chosen_trial_ids.append(trial_id)

        # decode the feedback / reward
        feedback_img = f'img/feedback/blue/{reward}.jpg'

        # log data
        thisExp.addData('response',  response)
        thisExp.addData('chosen_item', chosen_item)
        thisExp.addData('reward',  reward)
        thisExp.addData('is_old',  is_old)
        thisExp.addData('chosen_trial_id', chosen_trial_id)

        trial_id +=1
    TextComponent show_current_trial_id
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_id
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  Routine value_feedback
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    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = you made a choice! 
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  Routine welcome
    RoutineSettingsComponent welcome
      disabled = True
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    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = welcome to my experiment! 
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    TextComponent space_instruction_welcome
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = press [space] to continue
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  Routine feedback
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    TextComponent feedback_response
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $response
    TextComponent feedback_value
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $reward 
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    ImageComponent feedback_image
      disabled = True
      image [set every repeat] = $feedback_img
      size = (0.310, 0.363)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent show_trial_id_for_the_chosen_item
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $chosen_trial_id
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  Routine context
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    CodeComponent sample_trial_type_and_items
      Code Type = Auto->JS
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      Begin Experiment:
        # 1 based indexing
        chosen_items = []
        chosen_values = []
        chosen_trial_ids = []
        trial_id = 0
      Begin Routine:
        # 0 = new new ; 1 = old new
        u = randint(0, 100)
        if u > 60 or len(chosen_items) == 0:
            trial_type = 0
            trial_type_text = 'newnew -> encode'
        else:
            trial_type = 1
            trial_type_text = 'oldnew -> retrieve'

        print(u, trial_type, trial_type_text)

        # sample two items and their values
        if trial_type == 0:  # new new trial
            image_l = items.pop()
            value_l = values.pop()
            image_r = items.pop()
            value_r = values.pop()
            chosen_trial_id_l = trial_id
            chosen_trial_id_r = trial_id
            is_old_l = 0
            is_old_r = 0
        elif trial_type == 1:  # old new trial
            image_l = items.pop()
            value_l = values.pop()
            image_r = chosen_items.pop()
            value_r = chosen_values.pop()
            chosen_trial_id_l = trial_id
            chosen_trial_id_r = chosen_trial_ids.pop()
            is_old_l = 0
            is_old_r = 1
        else:
            raise ValueError('invalid trial type', trial_type)


        if randint(0, 100) > 50:
            image_l, image_r = image_r, image_l
            value_l, value_r = value_r, value_l
            is_old_l, is_old_r = is_old_r, is_old_l
            chosen_trial_id_l, chosen_trial_id_r = chosen_trial_id_r, chosen_trial_id_l
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $trial_type_text
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  Routine stim_loader
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  Routine loader
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    CodeComponent load_stims
      Code Type = Auto->JS
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      Before Experiment:
        n_items = 665
        #items = [f'img/no_deck/object{i}.jpg' for i in range(1, n_items+1)]
        #values = np.random.choice(value_set, len(n_items))
        items = []
        values = []
      Begin Routine:
        items.append(image)
        values.append(value)
        #print(len(values), value)
  Routine init
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    CodeComponent code_3
      Code Type = Auto->JS
Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trials-info-single-col-test.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'img/no_deck/object1.jpg'), ('value', 1)]),
      OrderedDict([('image', 'img/no_deck/object2.jpg'), ('value', 2)]),
      OrderedDict([('image', 'img/no_deck/object3.jpg'), ('value', 3)]),
      OrderedDict([('image', 'img/no_deck/object4.jpg'), ('value', 4)]),
      OrderedDict([('image', 'img/no_deck/object5.jpg'), ('value', 5)]),
      OrderedDict([('image', 'img/no_deck/object6.jpg'), ('value', 6)]),
      OrderedDict([('image', 'img/no_deck/object7.jpg'), ('value', 7)]),
      OrderedDict([('image', 'img/no_deck/object8.jpg'), ('value', 8)]),
      OrderedDict([('image', 'img/no_deck/object9.jpg'), ('value', 9)]),
      OrderedDict([('image', 'img/no_deck/object10.jpg'), ('value', 10)]),
      OrderedDict([('image', 'img/no_deck/object11.jpg'), ('value', 11)]),
      OrderedDict([('image', 'img/no_deck/object12.jpg'), ('value', 12)]),
      OrderedDict([('image', 'img/no_deck/object13.jpg'), ('value', 13)]),
      OrderedDict([('image', 'img/no_deck/object14.jpg'), ('value', 14)]),
      OrderedDict([('image', 'img/no_deck/object15.jpg'), ('value', 15)]),
      OrderedDict([('image', 'img/no_deck/object16.jpg'), ('value', 16)]),
      OrderedDict([('image', 'img/no_deck/object17.jpg'), ('value', 17)]),
      OrderedDict([('image', 'img/no_deck/object18.jpg'), ('value', 18)]),
      OrderedDict([('image', 'img/no_deck/object19.jpg'), ('value', 19)]),
      OrderedDict([('image', 'img/no_deck/object20.jpg'), ('value', 20)]),
      OrderedDict([('image', 'img/no_deck/object21.jpg'), ('value', 21)]),
      OrderedDict([('image', 'img/no_deck/object22.jpg'), ('value', 22)])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
    Routine loader
  LoopTerminator trials_2
  Routine welcome
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine context
    Routine item_2afc
    Routine feedback
  LoopTerminator trials
  Routine end
